# Generated by Configurator on Sat Jul 02 15:33:58 EDT 2016

# Reset
Property,Core,Initialize,0

# Devices
Device,COM25,SerialManager,COM25
Device,COM10,SerialManager,COM10
Device,COM14,SerialManager,COM14
Device,COM16,SerialManager,COM16
Device,COM17,SerialManager,COM17
Device,COM8,SerialManager,COM8
Device,COM4,SerialManager,COM4
Device,Andor sCMOS Camera,AndorSDK3,Andor sCMOS Camera
Device,ZStage,ASIStage,ZStage
Device,ESP300,FreeSerialPort,FreeSerialPort
Device,Wheel-A,SutterLambda,Wheel-A
Device,Auto-focus,FreeSerialPort,FreeSerialPort
Device,Galvo,FreeSerialPort,FreeSerialPort
Device,hddShutter,FreeSerialPort,FreeSerialPort
Device,laser,FreeSerialPort,FreeSerialPort

# Pre-init settings for devices
Property,ZStage,Axis,Z
Property,ZStage,Port,COM10
Property,ESP300,Port,COM4
Property,Wheel-A,Port,COM8
Property,Auto-focus,Port,COM16
Property,Galvo,Port,COM25
Property,hddShutter,Port,COM14
Property,laser,Port,COM17

# Pre-init settings for COM ports
Property,COM25,AnswerTimeout,500.0000
Property,COM25,BaudRate,9600
Property,COM25,DelayBetweenCharsMs,0.0000
Property,COM25,Handshaking,Off
Property,COM25,Parity,None
Property,COM25,StopBits,1
Property,COM25,Verbose,1
Property,COM10,AnswerTimeout,500.0000
Property,COM10,BaudRate,115200
Property,COM10,DelayBetweenCharsMs,0.0000
Property,COM10,Handshaking,Off
Property,COM10,Parity,None
Property,COM10,StopBits,1
Property,COM10,Verbose,1
Property,COM14,AnswerTimeout,500.0000
Property,COM14,BaudRate,9600
Property,COM14,DelayBetweenCharsMs,0.0000
Property,COM14,Handshaking,Off
Property,COM14,Parity,None
Property,COM14,StopBits,1
Property,COM14,Verbose,1
Property,COM16,AnswerTimeout,500.0000
Property,COM16,BaudRate,9600
Property,COM16,DelayBetweenCharsMs,0.0000
Property,COM16,Handshaking,Off
Property,COM16,Parity,None
Property,COM16,StopBits,1
Property,COM16,Verbose,1
Property,COM17,AnswerTimeout,500.0000
Property,COM17,BaudRate,9600
Property,COM17,DelayBetweenCharsMs,0.0000
Property,COM17,Handshaking,Off
Property,COM17,Parity,None
Property,COM17,StopBits,1
Property,COM17,Verbose,1
Property,COM8,AnswerTimeout,500.0000
Property,COM8,BaudRate,9600
Property,COM8,DelayBetweenCharsMs,0.0000
Property,COM8,Handshaking,Off
Property,COM8,Parity,None
Property,COM8,StopBits,1
Property,COM8,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,19200
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,Andor sCMOS Camera
Property,Core,Focus,ZStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Wheel-A
Label,Wheel-A,9,Filter-9
Label,Wheel-A,8,Filter-8
Label,Wheel-A,7,Filter-7
Label,Wheel-A,6,Filter-6
Label,Wheel-A,5,Filter-5
Label,Wheel-A,4,Filter-4
Label,Wheel-A,3,Filter-3
Label,Wheel-A,2,Filter-2
Label,Wheel-A,1,Filter-1
Label,Wheel-A,0,Filter-0

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

